PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new branding test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine welcome_screen
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    TextComponent welcome_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        سلام
        روز خوش

        ممنونم که ما را در انجام این آزمون همراهی می کنید
         با فشردن کلید
         space
        به صفحه بعد منتقل می شوید
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instruction
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    TextComponent Instruction_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
         سلام و خوش آمدید

        شما در حال شرکت در یک آزمون حافظه و توجه هستید
        این آزمون شامل دو مرحله است

         «مرحله اول: «یادگیری برندها و شعارها
        در این مرحله، تعدادی برند به‌همراه شعار آن‌ها روی صفحه نمایش داده می‌شوند
        لطفاً با دقت به برند و شعار نمایش‌داده‌شده نگاه کنید و
        سعی کنید آن را به خاطر بسپارید
        "برخی از برندها ممکن است چند بار تکرار شوند"
         هر برند و شعار به مدت 5 ثانیه نمایش داده می‌شود

        « مرحله دوم: «تشخیص
        پس از پایان مرحله یادگیری، برندها و شعارهایی به شما نمایش داده می‌شوند
        برخی از آن‌ها در مرحله یادگیری وجود داشتند و برخی جدید هستند
        شما باید با فشردن یکی از دکمه‌های زیر پاسخ دهید

         اگر فکر می‌کنید این برند و شعار در مرحله یادگیری وجود داشت، کلید
         y را فشار دهید
         اگر فکر می‌کنید قبلاً این برند و شعار را ندیده‌اید، کلید
         n را فشار دهید

         سعی کنید با دقت و بدون عجله پاسخ دهید
         اطلاعات شما فقط برای اهداف پژوهشی استفاده خواهد شد

        برای شروع آزمون کلید
         Space فشار دهید
    KeyboardComponent key_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine study_phase
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    TextComponent brands
      color = blue
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $brand
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    TextComponent slogan_2
      color = crimson
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      pos = (0,-0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $slogan
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  Routine fixction
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine break_phase
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    TextComponent break_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        لطفا 5 دقیقه استراحت کنید


        با فشردن کلید
         space
        به صفحه بعد منتقل می شوید
    KeyboardComponent key_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine feedbacktest
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    TextComponent feedbackbrand
      color = blue
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $brand
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    TextComponent feedbackslogan
      color = crimson
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $slogan
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine end_screen
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    TextComponent end_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        سپاسگزارم بابت همراهی تون
        روز خوش


        لطفا کمی صبر کنید ما در حال ذخیره سازی
        اطلاعات آزمون شما هستیم
        سپس با فشردن کلید
        space
        از آزمون خارج شوید
    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent exit
      Code Type = Auto->JS
      Begin Routine:
        // Prevent PsychoJS’s default download dialog
        psychoJS._saveResults = 0;
        // Build a filename: experimentName_datetime.csv
        const filename = `${psychoJS._experiment._experimentName}_${psychoJS._experiment._datetime}.csv`;
        // Extract trial data as an array of objects
        const dataObj = psychoJS._experiment._trialsData;
        // Convert array of objects to CSV string
        const data = [Object.keys(dataObj[0])].concat(dataObj).map(row => {
          return Object.values(row).toString();
        }).join('\n');
        // POST data to DataPipe’s API endpoint
        fetch('https://pipe.jspsych.org/api/data', {
          method: 'POST',
          headers: {
            'Content-Type': 'application/json',
            Accept: '*/*',
          },
          body: JSON.stringify({
            experimentID: 'sbUdjyD5xBio', // ← Replace with your DataPipe ID
            filename: filename,
            data: data,
          }),
        })
          .then(response => response.json())
          .then(json => {
            console.log('DataPipe response:', json);
            // After saving, end the PsychoJS experiment
            quitPsychoJS();
          })
          .catch(err => {
            console.error('Error sending data to DataPipe:', err);
            quitPsychoJS();
          });
Flow
  Routine welcome_screen
  Routine instruction
  LoopInitiator study_brands loopType="TrialHandler"
    conditionsFile = studyphase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'brand': 'دیجی کالا', 'slogan': 'لبخند به خانه می رسد', 'type': 'real', 'repitition': 1, 'brand_morphemes': 2, 'brand_syllables': 4, 'semantic_coherence_score': 3},
      {'brand': 'آفام', 'slogan': 'هنر پوشیدن', 'type': 'real', 'repitition': 3, 'brand_morphemes': 1, 'brand_syllables': 2, 'semantic_coherence_score': 2},
      {'brand': 'رونیکس', 'slogan': 'آخرین ابزاری که می خرید', 'type': 'real', 'repitition': 1, 'brand_morphemes': 2, 'brand_syllables': 2, 'semantic_coherence_score': 3},
      {'brand': 'شودر', 'slogan': 'چون جزئیات مهم است', 'type': 'real', 'repitition': 1, 'brand_morphemes': 1, 'brand_syllables': 2, 'semantic_coherence_score': 3},
      {'brand': 'دیوار', 'slogan': 'دور شهر نگرد تو دیوار بگرد', 'type': 'real', 'repitition': 1, 'brand_morphemes': 1, 'brand_syllables': 2, 'semantic_coherence_score': 5},
      {'brand': 'هاکوپیان', 'slogan': 'زندگی ارزشمند است', 'type': 'real', 'repitition': 1, 'brand_morphemes': 1, 'brand_syllables': 4, 'semantic_coherence_score': 3},
      {'brand': 'باسلام', 'slogan': 'قهرمان شمایید', 'type': 'real', 'repitition': 3, 'brand_morphemes': 2, 'brand_syllables': 3, 'semantic_coherence_score': 2},
      {'brand': 'سافتلن', 'slogan': 'یکپارچه مهربانی', 'type': 'real', 'repitition': 1, 'brand_morphemes': 1, 'brand_syllables': 2, 'semantic_coherence_score': 3},
      {'brand': 'استیل البرز', 'slogan': 'زود جوش میاره', 'type': 'real', 'repitition': 1, 'brand_morphemes': 2, 'brand_syllables': 5, 'semantic_coherence_score': 4}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
    Routine study_phase
    Routine fixction
  LoopTerminator study_brands
  Routine break_phase
  LoopInitiator test_brands loopType="TrialHandler"
    conditionsFile = testphase.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('brand', 'دیجی کالا'), ('slogan', 'لبخند به خانه می رسد'), ('type', 'real'), ('repitition', 1.0), ('shown', 'y')]),
      OrderedDict([('brand', 'آفام'), ('slogan', 'هنر پوشیدن'), ('type', 'real'), ('repitition', 3.0), ('shown', 'y')]),
      OrderedDict([('brand', 'همراه اول'), ('slogan', 'هیچ کس تنها نیست'), ('type', 'real'), ('repitition', None), ('shown', 'n')]),
      OrderedDict([('brand', 'میهن'), ('slogan', 'دوست تو و من'), ('type', 'real'), ('repitition', None), ('shown', 'n')]),
      OrderedDict([('brand', 'مهرام'), ('slogan', 'خوشمزه و خوشنام'), ('type', 'real'), ('repitition', None), ('shown', 'n')]),
      OrderedDict([('brand', 'رونیکس'), ('slogan', 'اخرین ابزاری که می خرید'), ('type', 'real'), ('repitition', 1.0), ('shown', 'y')]),
      OrderedDict([('brand', 'شودر'), ('slogan', 'چون جزئیات مهم است'), ('type', 'real'), ('repitition', 1.0), ('shown', 'y')]),
      OrderedDict([('brand', 'نستله'), ('slogan', 'غذا خوب، زندگی خوب'), ('type', 'real'), ('repitition', None), ('shown', 'n')]),
      OrderedDict([('brand', 'دیوار'), ('slogan', 'دور شهر نگرد، تو دیوار بگرد'), ('type', 'real'), ('repitition', 1.0), ('shown', 'y')]),
      OrderedDict([('brand', 'هاکوپیان'), ('slogan', 'زندگی ارزشمند است'), ('type', 'real'), ('repitition', 1.0), ('shown', 'y')]),
      OrderedDict([('brand', 'فلایتیو'), ('slogan', 'دنیات رو کشف کن'), ('type', 'real'), ('repitition', None), ('shown', 'n')]),
      OrderedDict([('brand', 'فیدیبو'), ('slogan', 'مطالعه برای همه، همه وقت همه جا'), ('type', 'real'), ('repitition', None), ('shown', 'n')])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
    Routine feedbacktest
  LoopTerminator test_brands
  Routine end_screen
